PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': '', 'płeć': "['kobieta', 'mężczyzna']", 'wiek': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = eyetracker
  eyetracker = Pupil Labs
  keyboardBackend = ioHub
  plConfidenceThreshold = 0.6
  plPupilCaptureRecordingEnabled = True
  plPupilRemoteAddress = 127.0.0.1
  plPupilRemotePort = 50020
  plPupilRemoteTimeoutMs = 1000
  plPupillometryOnly = False
  plSurfaceName = HP_Ani
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Routines
  Routine end
    TextComponent text_instr
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = Dziękujemy za udział w badaniu!
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    KeyboardComponent key_resp_3
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction
    TextComponent space
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0
      text = Naciśnij spację, żeby przejść dalej
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    KeyboardComponent space_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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    TextboxComponent welcome_message
      alignment = top-left
      anchor = top-left
      bold = False
      editable = False
      letterHeight = 0.04
      pos = (-.8, .4)
      size = (1.6, .5)
      startVal [time (s)] = 0.0
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      text:
        Cześć,

        dziękujemy, że zgodziłaś/eś się wziąć udział w badaniu. Jesteśmy zespołem naukowców i naukowczyń z Instytutu Studiów Społecznych im. prof. Roberta Zajonca na Uniwersytecie Warszawskim i prowadzimy badania nad decyzjami konsumenckimi.
        Przechodząc dalej wyrażasz zgodę na udział w badaniu. Będzie ono trwało około 10 minut i składało się z dwóch części. Podczas trwania całego badania będziemy monitorować ruchy Twoich gałek ocznych. Sposób zbierania tych danych nie tworzy zagrożenia dla Twojego wzroku, ani innych ryzyk zdrowotnych. Gdybyś jednak poczuł/a się źle, poinformuj o tym badacza lub badaczkę. Pamiętaj, że w każdej chwili masz prawo zrezygnować z udziału z badania bez podania przyczyny.
  Routine ratings
    KeyboardComponent key_resp_2
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = .5
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    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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      text:
        Na ile gwiazdek w skali od 1 do 5 oceniłabyś/oceniłbyś prezentowany przed chwilą produkt?


        Wybierz na klawiturze numerycznej liczbę gwiazdek i naciśnij odpowiedni klawisz.
  Routine trust_manipulation
    TextComponent space2
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0
      text = Naciśnij spację, żeby przejść dalej
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    TextboxComponent trust_instruction
      alignment = top-left
      anchor = top-left
      bold = False
      editable = False
      letterHeight = 0.04
      pos = (-.8, .4)
      size = (1.6, .5)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $trust
    KeyboardComponent space2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    CodeComponent trust
      Code Type = Auto->JS
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      Begin Experiment:
        if int(expInfo['participant']) % 2 == 0:
            trust = """Za chwilę na ekranie komputera pojawią się informacje o czterech produktach, które poprosilibyśmy Cię, żebyś ocenił/a. Zostały one wystawione na sprzedaż na popularnym serwisie aukcyjnym, który cieszy się dobrą renomą. Użytkownicy i użytkowniczki wysoko oceniają obsługę klienta serwisu, która w razie jakichkolwiek problemów z transakcją służy pomocą. Dodatkowo uczciwe i szczere opinie użytkowników i użytkowniczek na temat wad i zalet produktów ułatwiają klientom i klientkom podejmowanie decyzji."""
        else:
            trust = """Za chwilę na ekranie komputera pojawią się informacje o czterech produktach, które poprosilibyśmy Cię, żebyś ocenił/a. Zostały one wystawione na sprzedaż na popularnym serwisie aukcyjnym, który cieszy się szemraną opinią. Użytkownicy i użytkowniczki nisko oceniają obsługę klienta serwisu, która często nie odpowiada na prośby o interwencję. Dodatkowo często zdarza się, że opinie prezentowane przez użytkowników i użytkowniczki serwisu na temat produktów mają jedynie zachęcić do kupna a nie zawsze prawdziwie opisują wady i zalety projektu."""
  Routine products_display
    ImageComponent stimulus
      anchor = top-center
      image [set every repeat] = $image
      pos = (0, 0.4)
      size = (0.25,0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
      units = height
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    TextComponent text
      letterHeight = 0.03
      pos = (0, .1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every repeat] = $price
      wrapWidth = 50
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    TextboxComponent left_text
      alignment = top-left
      anchor = top-center
      bold = False
      editable = False
      letterHeight = 0.02
      pos = (-.6, 0)
      size = (.5, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every frame] = $facts
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    TextboxComponent right_text
      alignment = top-left
      anchor = top-center
      bold = False
      editable = False
      letterHeight = 0.02
      pos = (.6, 0)
      size = (.5, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every frame] = $opinions
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    TextComponent left_title
      letterHeight = 0.03
      pos = (-.6, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every frame] = $left
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    TextComponent right_title
      letterHeight = 0.03
      pos = (.6, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every frame] = $right
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import remote_annotations as ra
        import time
        import random

        ip_address = '127.0.0.1'
        port = 50020
        # 1. Setup network connection
        capture_exisits = ra.check_capture_exists(ip_address, port)
        if capture_exisits:
            pupil_remote, pub_socket = ra.setup_pupil_remote_connection(ip_address, port)

            # 2. Setup local clock function
            local_clock = time.perf_counter

            # 3. Measure clock offset accounting for network latency
            stable_offset_mean = ra.measure_clock_offset_stable(
                pupil_remote, clock_function=local_clock, n_samples=10
            )

            pupil_time_actual = ra.request_pupil_time(pupil_remote)
            local_time_actual = local_clock()
            pupil_time_calculated_locally = local_time_actual + stable_offset_mean

            ra.notify(pupil_remote,{"subject": "start_plugin", "name": "Annotation_Capture", "args": {}},)
      Begin Experiment:
            # start a recording (necessary for this example script)
        if capture_exisits:

            pupil_remote.send_string("R")
            pupil_remote.recv_string()
      Begin Routine:
        left = 'FAKTY'
        right = 'OPINIE'
        if random.randint(0,1):
            opinions, facts = facts, opinions
            left, right = right, left

        if capture_exisits:
            local_time = local_clock()
            label = product + '_' + left + '_start'
            minimal_trigger = ra.new_trigger(label, local_time + stable_offset_mean)
            ra.send_trigger(pub_socket, minimal_trigger)
      End Experiment:
        if capture_exisits:
            # stop recording
            pupil_remote.send_string("r")
            pupil_remote.recv_string()
      End Routine:
        if capture_exisits:
            local_time = local_clock()
            label = product + '_' + left + '_end'
            minimal_trigger = ra.new_trigger(label, local_time + stable_offset_mean)
            ra.send_trigger(pub_socket, minimal_trigger)
Flow
  Routine instruction
  Routine trust_manipulation
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions/conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'product': 'laptop', 'facts': 'Posiada ekran o przekątnej 15.6" i wysokiej rozdzielczości. Matowa powłoka matrycy pozwala na korzystanie z komputera nawet przy dużym słońcu.\nWyposażony w dwurdzeniowy procesor.\nWbudowana pamięć RAM o pojemności 8 GB pozwala na uruchomienie kilku aplikacji jednocześnie oraz granie w wymagające sprzętowo gry komputerowe.\nDysk SSD o pojemności 256 GB \nślad węglowy: 423 kg', 'opinions': 'Bardzo dobre wykonanie, minimalistyczny wygląd, podoba mi się, że nie ma zbędnych naklejek. Praca na nim przebiega płynnie, ekran rzeczywiście ładnie odwzorowuje kolory. Pole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,
      {'product': 'tablet', 'facts': 'Posiada czytelny wyświetlacz o przekątnej 10,5 cala\nJest zasilany akumulatorem o pojemności 7040 mAh i ma opcję szybkiego ładowania.\nPosiada dwa aparaty. Przedni pozwala robić selfie i nagrywać filmy z ręki, a tylny umożliwia nagrywanie filmów w Full HD.\nWbudowane 4 GB pamięci RAM pozwala obsługiwać nawet kilka aplikacji naraz.\nślad węglowy: 170 kg', 'opinions': 'jestem zadowolona , jakość adekwatna do ceny , a nawet lepsza.\nŚwietny wygląd, komfort użytkowania i osiągi jak na ten budżet. Polecam!\nSolidny, dobrze wykonany. Działa sprawnie, jest pojemny, nie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,
      {'product': 'smartwatch', 'facts': 'Czytelny wyświetlacz 1.4”.\nBezprzewodowa łączność ze smartphonem (kompatybilny zarówno z Androidem jak i iOSem).\nAsystent zdrowotny z funkcjami pomiaru ciśnienia i EKG, analiza składu ciała, zaawansowana analiza snu, czujniki aktywności fizycznej.\nBateria pracuje do 40 godzin i naładujesz ją od 0% do 100% w godzinę i 48 minut.\nPosiada 16 GB pamięci wewnętrznej.\nślad węglowy: 43 kg', 'opinions': 'Super Smartwatch. Pomógł mi zadbać o zdrowie, fajnie się z nim ćwiczy. Bateria mi trzymała raczej nieźle, a jestem na to wyczulona. Ogólnie Polecam. Jestem supe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,
      {'product': 'smartband', 'facts': 'Bezprzewodowa łączność ze smartphonem (kompatybilny zarówno z Androidem jak i iOSem).\nAutomatycznie wykrywa 3 tryby: bieżnia, bieganie lub spacery na świeżym powietrzu.\nPrzy standardowym użytkowaniu działa do 14 dni na jednym naładowaniu baterii - w trybie oszczędzania baterii maksymalnie do 20 dni.\nślad węglowy: 36 kg', 'opinions': 'Bardzo dobry zakup. Wygląda jak smartwatch, estetycznie wykonany , posiada wielorakie funkcje, których szukałem. No i możliwości sparowania są na plus!\nUdany zakup. Spełnił wszystkie moje oczekiwania. Nawet na chudszej ręce d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
    Routine products_display
    Routine ratings
  LoopTerminator trials
  Routine end
